<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM3</ard:PortName>
                <ard:Pin>12</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>test.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM3</ard:PortName>
                <ard:Pin>12</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>